run("Grid/Collection stitching", "type=[Grid: column-by-column] order=[Down & Right                ] grid_size_x=2 grid_size_y=3 tile_overlap=0 first_file_index_i=1 directory=D:\\Data\\eds\\testMap\\png\\ij file_names=tile-{i}.tif output_textfile_name=TileConfiguration.txt fusion_method=[Linear Blending] regression_threshold=0.30 max/avg_displacement_threshold=2.50 absolute_displacement_threshold=3.50 computation_parameters=[Save memory (but be slower)] image_output=[Fuse and display] use");
saveAs("Tiff", "D:\\Data\\eds\\testMap\\png\\stitched.tif");
run("RGB Color");
selectWindow("stitched.tif");
close();
selectWindow("stitched.tif (RGB)");
saveAs("Tiff", "D:\\Data\\eds\\testMap\\png\\stitched.tif");
run("Set Scale...", "distance=1 known=2.822 unit=nm");
run("Add Scale Bar", "width=100 height=9 font=48 color=White location=[Lower Right] bold");
close();
